CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^Pos0(?P<sample>\d{2})(?P<nothing>_S\d{3})_t(?P<time>\d{2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '\x97', 'Load the images by matching files in the folder against the unique text pattern \x91.JPG\x92']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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Scratch
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:sample

Crop:[module_num:5|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notes:['cut image in half', '']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
    Select the input image:Scratch
    Name the output image:cropHalf
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:0,550
    Top and bottom rectangle positions:0,end
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    Remove empty rows and columns?:All
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
ColorToGray:[module_num:6|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notes:['Combine the color image into a grayscale image.']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
    Select the input image:cropHalf
    Conversion method:Combine
    Image type:RGB
    Name the output image:OrigGray
    Relative weight of the red channel:0
    Relative weight of the green channel:1
    Relative weight of the blue channel:0
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:OrigGray
    Name the output image:IllumGray
    Select how the illumination function is calculated:Background
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    Block size:3
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:60
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:OrigGray
    Name the output image:CorrGray
    Select the illumination function:IllumGray
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RescaleIntensity:[module_num:9|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
    Select the input image:CorrGray
    Name the output image:RescaleIntensity
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.02,0.2
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
ReduceNoise:[module_num:10|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
    Select the input image:RescaleIntensity
    Name the output image:ReduceNoise
    Size:3
    Distance:4
    Cut-off distance:0.1

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:ReduceNoise
    Name the primary objects to be identified:cells
    Typical diameter of objects, in pixel units (Min,Max):10,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:25
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.1,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:20
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    Thresholding method:Minimum Cross-Entropy

TrackObjects:[module_num:12|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
    Choose a tracking method:Overlap
    Select the objects to track:cells
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    Maximum pixel distance to consider matches:50
    Select display option:Color Only
    Save color-coded image?:Yes
    Name the output image:TrackedCells
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:20
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
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
ExpandOrShrinkObjects:[module_num:13|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
    Select the input objects:cells
    Name the output objects:expanded_cells
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:20
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
ConvertObjectsToImage:[module_num:14|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
    Select the input objects:expanded_cells
    Name the output image:Cell_object_to_image
    Select the color format:Binary (black & white)
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
Smooth:[module_num:15|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notes:['Smooth the image using a Gaussian filter.']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
    Select the input image:Cell_object_to_image
    Name the output image:Smoothed
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:75
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
IdentifyPrimaryObjects:[module_num:16|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notes:['Identify the tissue region using three-class Otsu.']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
    Select the input image:Smoothed
    Name the primary objects to be identified:Tissue
    Typical diameter of objects, in pixel units (Min,Max):1,1200
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:25
    Suppress local maxima that are closer than this minimum allowed distance:500
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1
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    Manual threshold:0.3
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
FillObjects:[module_num:17|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
    Select the input object:Tissue
    Name the output object:FillObjects
    Minimum hole size:75
    Planewise fill:No

MeasureImageAreaOccupied:[module_num:18|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notes:['Measure the area occupied by the tissue region.']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
    Measure the area occupied by:Objects
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    Select object sets to measure:FillObjects

OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ReduceNoise
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#F40B0B
    Select objects to display:cells

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Scratch
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:B1half
    Saved file format:png
    Output file location:Elsewhere...|\\\\vf-hemopictures\\hemopictures$\\Bas Laan\\087-1 Full char\\Scratch\\087-1 Full char B1 24-09-23\\CellProfiler Output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToDatabase:[module_num:21|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:B1half
    Output file location:Elsewhere...|\\\\vf-hemopictures\\hemopictures$\\Bas Laan\\087-1 Full char\\Scratch\\087-1 Full char B1 24-09-23\\CellProfiler Output
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:B1half.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:B1half
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    Export object relationships?:No
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:22|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notes:['Export any measurements to a comma-delimited file (.csv). Since the tissue area is an image measurement, it is included in the per-image file.']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enabled:False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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|\\\\vf-hemopictures\\hemopictures$\\Bas Laan\\087-1 Full char\\Scratch\\087-1 Full char B1 24-09-23\\CellProfiler Output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:B1
    Overwrite existing files without warning?:No
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